CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:315
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:DNA
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):15,50
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
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    Use advanced settings?:No
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
ConvertObjectsToImage:[module_num:6|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
    Select the input objects:IdentifyPrimaryObjects
    Name the output image:CellImage
    Select the color format:uint16
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
SaveImages:[module_num:7|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
    Select the type of image to save:Image
    Select the image to save:CellImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop/HaCaT-FUCCI/CellProfiler-output
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
TrackObjects:[module_num:8|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
    Choose a tracking method:Overlap
    Select the objects to track:IdentifyPrimaryObjects
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    Maximum pixel distance to consider matches:50
    Select display option:Color and Number
    Save color-coded image?:No
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    Filter objects by lifetime?:No
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
ExportToSpreadsheet:[module_num:9|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop/HaCaT-FUCCI/CellProfiler-output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:IdentifyPrimaryObjects|TrackObjects_ParentObjectNumber_50
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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